PsychoPy2experiment version="2023.2.2"
Settings
  Audio latency priority = 0
  Audio lib = ptb
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = deg
  Window size (pixels) = [1440, 900]
  expName = contrast
  keyboardBackend = ioHub
  logging level = debug
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Routines
  Routine trial
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    GratingComponent grating
      color = $[.5,.5,.5]
      durationEstim = .116
      mask = gauss
      opacity [set every repeat] = $level
      phase = 0.5
      pos [set every repeat] = $stimLoc
      sf = 1
      size = (3,3)
      startVal [time (s)] = 0.5
      stopVal [duration (frames)] = 7
      tex = sin
      texture resolution = 512
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    KeyboardComponent resp
      allowedKeys = 'left','right'
      correctAns = $correctAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    CodeComponent GetLastLevel
      Code Type = Auto->JS
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      End Routine:
        lastLevel = level
    PolygonComponent fixation_circle
      fillColor = red
      lineColor = red
      shape = circle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.1
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  Routine instructions
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    TextboxComponent instructions1
      anchor = bottom-center
      bold = False
      editable = False
      letterHeight = 1
      padding = None
      startVal [time (s)] = 0.0
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      text:
        KEEP YOUR EYES ON THE FIXATION DOT.
        TRY NOT TO MOVE YOU EYES
        IS THE GRATING ON THE LEFT OR RIGHT?
        USE ARROWS
        IT WILL GET VERY DIFFICULT AND IT’S OKAY TO GUESS IF YOU DON’T KNOW
        IT’S OKAY TO TAKE A QUICK BREAK TO REST YOUR EYES IF YOU NEED TO
    KeyboardComponent key_resp
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    PolygonComponent fixation_circle_intro
      fillColor = red
      lineColor = red
      shape = circle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.1
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  Routine updateTilt2
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        if random()>0.5:
            tiltSide = -1 #this is the side it tilts to
            correctAns = 'left'
            if random()>0.5:
                stimLoc = [-5,  5] #this is the location
            else:
                stimLoc = [-5, -5]
        else:
            tiltSide = 1
            correctAns = 'right'
            if random()>0.5:
                stimLoc = [-5, 5] #this is the location
            else:
                stimLoc = [-5, -5]
  Routine updateLocation
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    CodeComponent location
      Code Type = Py
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      Begin Routine:
        if random()>0.5:
            correctAns = 'left'
            stimLoc = [-3, 0]
        else:
            correctAns = 'right'
            stimLoc = [3, 0]
  Routine trialnew
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    GratingComponent grating_2
      color = $[.5,.5,.5]
      durationEstim = .116
      mask = gauss
      opacity [set every repeat] = $level
      ori = 90
      phase = 0.5
      pos [set every repeat] = $stimLoc
      sf = 1
      size = (3,3)
      startVal [time (s)] = 0.5
      stopVal [duration (frames)] = 7
      tex = sin
      texture resolution = 512
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    KeyboardComponent resp_2
      allowedKeys = 'left','right'
      correctAns = $correctAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    PolygonComponent fixation_circle_2
      fillColor = red
      lineColor = red
      shape = circle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.1
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Flow
  Routine instructions
  LoopInitiator trials loopType="MultiStairHandler"
    conditions = [{'label': 'staircase1', 'nReps': 50, 'startVal': 1, 'maxVal': 1, 'minVal': 0, 'stepSizes': 0.8, 'stepType': "log'", 'nUp': 1, 'nDown': 3, 'nReversals': 5}]
    conditionsFile = staircaseTemplate1.xlsx
    loopType = interleaved staircases
    nReps = 50
    stairType = QUEST
    switchMethod = random
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    Routine updateLocation
    Routine trial
  LoopTerminator trials
  LoopInitiator trials2 loopType="MultiStairHandler"
    conditions = [{'label': 'starcase2', 'nReps': 50, 'startVal': '$lastLevel', 'maxVal': 1, 'minVal': 0, 'stepSizes': 0.8, 'stepType': "log'", 'nUp': 1, 'nDown': 3, 'nReversals': 5}]
    conditionsFile = staircaseTemplate2.xlsx
    loopType = interleaved staircases
    nReps = 50
    stairType = QUEST
    switchMethod = random
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    Routine updateLocation
    Routine trialnew
  LoopTerminator trials2
